PsychoPy2experiment version="2022.2.2"
Settings
  Data filename = f"data/{expInfo['id']}_{expInfo['session']}_{expInfo['run']}_{expName}_{expInfo['date']}"
  Experiment info = {'id': '', 'session': '', 'run': ''}
  Full-screen window = True
  Monitor = Monitor
  Save excel file = True
  Screen = 1
  Units = norm
  Use version = latest
  Window size (pixels) = [1920, 1080]
  color = 1.0000, -1.0000, -1.0000
  expName = my_experiment
  exportHTML = on Save
  keyboardBackend = ioHub
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Routines
  Routine fixation_beginning
    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        play = ''
        key_pressed = 0
        conditions = ['Start']
      End Routine:
        start_trials = globalClock.getTime()
    PolygonComponent fixation_cross_beginning
      fillColor = white
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0.4
      shape = cross
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      units = pix
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  Routine fixation_end
    PolygonComponent fixation_cross_end
      fillColor = white
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0.4
      shape = cross
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 16.0
      units = pix
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  Routine waiting
    CodeComponent code
      Code Type = Py
      Before Experiment:
        globalClock = core.Clock()
      Begin Experiment:
        import pandas as pd

        ordering_file = pd.read_excel('ExperimentOrder.xlsx')
        run_files = ordering_file.iloc[int(expInfo['session'])-1].to_list()
        run_file = run_files[int(expInfo['run'])-1]

        file_paths = []
        paths = pd.read_excel(run_file, usecols='E').dropna().values.tolist()
        for path in paths:
            file_paths.append(path)
        file_paths = {path for sublist in file_paths for path in sublist}
      Begin Routine:
        import pandas as pd

        preloading = True

        stimuli = {}
        for path in file_paths:
            stimuli[path] = visual.MovieStim3(win=win,filename=path, name=path[:-4], size=(1760,990))

        preloading = False
    TextComponent waiting_txt
      color = black
      letterHeight = 0.08
      startVal [condition] = preloading == False
      text = Preloading done! Waiting for trigger...
      wrapWidth = 1.4
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    KeyboardComponent trigger
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [condition] = preloading == False
      syncScreenRefresh = False
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  Routine main
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        conditions.append(EventName)
        start_trial = globalClock.getTime()

        if conditions[-1] == 'NULL':
            play = 'NULL'
        else:
            stim = stimuli[FilePath]
            stim.play()
      Each Frame:
        import numpy as np

        if conditions[-1] != 'NULL':
            #stim.draw()
            if key_resp.keys in ('r','b', 'g', 'y'):
                key_pressed = 1
            if np.ceil(t) == stim.duration:
                stim.pause()
            stim.draw()
            #if stim.status == FINISHED:
            #    continueRoutine = Fals
        if t >= Duration - 0.01:
            continueRoutine = False
      End Routine:
        if key_pressed == 1 and 'Catch' in conditions[-2:]:
            thisExp.addData('key_resp', 'got catch')
        elif key_pressed == 0 and 'Catch' in conditions[-2:]:
            thisExp.addData('key_resp', 'missed catch')
        elif key_pressed == 1:
            thisExp.addData('key_resp', 'false press')
        else:
            thisExp.addData('key_resp', 'no press')

        thisExp.addData('AbsoluteOnsetTime', start_trial)
        thisExp.addData('RelativeOnsetTime', start_trial - start_trials)
        end_trial = globalClock.getTime()
        thisExp.addData('AbsoluteOffsetTime', end_trial)
        thisExp.addData('RelativeOffsetTime', end_trial - start_trials)
        thisExp.addData('ActualDuration', end_trial - start_trial)

        play = ''
        key_pressed = 0
    KeyboardComponent key_resp
      allowedKeys = 'r','b', 'g', 'y'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $Duration
      syncScreenRefresh = False
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    PolygonComponent fixation_cross
      fillColor = white
      lineColor = 0.0000, 0.0000, 0.0000
      lineWidth = 0.4
      saveStartStop = False
      shape = cross
      size = (100,100)
      startEstim = 0
      startVal [condition] = play == 'NULL'
      units = pix
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Flow
  Routine waiting
  Routine fixation_beginning
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $run_file
    loopType = sequential
    nReps = 1
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    Routine main
  LoopTerminator trials
  Routine fixation_end
